CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "Mask")
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_Nuclei_Mask")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "_Aggregates_Mask")
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    Name to assign these objects:Aggregates
    Select the image type:Objects
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    Select the rule criteria:and (file doesnot contain "Mask")
    Name to assign these images:OG
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Cells_Mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:OG
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2
    Channel number:3
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    Image name:Channel3

MaskObjects:[module_num:6|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
    Select objects to be masked:Cells
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:7|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Select images to measure:Channel1, Channel2, Channel3
    Select objects to measure:Aggregates, Cells, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Aggregates, Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

RelateObjects:[module_num:9|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
    Parent objects:Cells
    Child objects:Aggregates
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:Aggregates
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:11|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
    Parent objects:Cytoplasm
    Child objects:Aggregates
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:12|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|D:\\data\\SLURM_IMAGES_1715778875\\data\\out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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